PsychoPy2experiment version="1.90.2"
Settings
  expName = main
  Experiment info = {'participant_name': ''}
  Full-screen window = True
  Window size (pixels) = [1920, 1080]
  Screen = 1
  Monitor = UVA
  color = $[-1,-1,-1]
  Units = deg
  Data filename = u'logs/%s_events.csv' % expInfo['participant_name']
  Save log file = False
  Save wide csv file = False
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Routines
  Routine welcome
    TextComponent welcome_txt
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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      text:
        Welcome to the "test your reverse inference" challenge!

        How accurate are you at interpreting pretty brain images?
        And are you better than my decoder?

        (Press any key to continue.)
    KeyboardComponent welcome_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine show_img
    CodeComponent code
      Begin Experiment:
        nr_correct = 0
      End Routine:
        if choice.getRating() == correct_resp:
            nr_correct += 1
    ImageComponent img
      startVal [time (s)] = 0.0
      pos = (0, 1.5)
      size = (10, 6.5)
      image [set every repeat] = $contrast_img
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    RatingScaleComponent choice
      startVal [time (s)] = 0.0
      categoryChoices = WM, Neg-scene, faces, conflict
      scaleDescription = Which contrast?
      singleClick = True
      showAccept = False
      storeRatingTime = False
      forceEndRoutine = True
      size = 1.5
      pos = 0, -0.6
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  Routine end
    CodeComponent code_2
      Begin Experiment:
        your_score = 0
      Begin Routine:
        import pandas as pd
        your_score = 100*(nr_correct / 40)
        df = pd.read_csv('scores.csv')
        to_append = pd.DataFrame({'participant_name': expInfo['participant_name'], 'score': your_score}, index=[df.size])
        df = df.append(to_append)
        df = df.sort_values(by='score', ascending=False)
        print_string = df.to_string(index=False)
        df.to_csv('scores.csv', index=False)
    TextComponent end_txt
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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      text [set every repeat]:
        """ You had %i / 40 correct! (%.2f%%)

        (Press any button to see the highscores!)
        """ % ($nr_correct, $your_score)
    KeyboardComponent go_to_score
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine score_overview
    CodeComponent code_3
      Begin Routine:
        score_overview_txt.alignHoriz = 'center'
    TextComponent score_overview_txt
      startVal [time (s)] = 0.0
      text [set every repeat] = $print_string
      letterHeight = 0.5
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    KeyboardComponent end_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine welcome_2
    TextComponent welcome_txt_2
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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      text:
        You're going to see brain images ("contrast maps") from different tasks (specific contrast in parentheses):

        1. A conflict task (incongruent stimuli > congruent stimuli)
        2. A working memory task (high WM > low WM)
        3. A task with faces (faces > scrambled)
        4. A task with (emotional) scenes (negative scene > neutral scene)

        (Press any key to continue.)
    KeyboardComponent welcome_resp_2
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine welcome_3
    TextComponent welcome_txt_3
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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      text:
        For every brain image, you have to guess which task this particular subject was doing.
        You do this by clicking the option with the mouse.

        There are 40 trials, with 10 trials of each task (WM, conflict, faces, negative scenes).
        Good luck!

        (Press any key to start.)
    KeyboardComponent welcome_resp_3
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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Flow
  Routine welcome
  Routine welcome_2
  Routine welcome_3
  LoopInitiator img_loop loopType="TrialHandler"
    nReps = 1
    conditionsFile = stims.csv
    Selected rows = 0:3
    loopType = random
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    conditions:
      [OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0015.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0019.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0023.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0025.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0026.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0028.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0029.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0042.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0075.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/anticipation/rendered_thresh_zstat6_sub-0077.png'), ('correct_resp', 'Neg-scene')]),
      OrderedDict([('contrast_img', 'stims/gstroop/rendered_thresh_zstat3_sub-0013.png'), ('correct_resp', 'conflict')]),
      OrderedDict([('contrast_img', 'stims/gstroop/rendered_thresh_zstat3_sub-0018.png'), ('correct_resp', 'conflict')])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
    Routine show_img
  LoopTerminator img_loop
  Routine end
  Routine score_overview
